 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLVectorDbTracking.hsl" }
 namespace _Method { #include "Biotek\\David\\Hitpicking\\HSLTrcLib.hsl" }
 namespace _Method { #include "HSLBarcodeReader.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLPerkinElmerFlexDrop.hsl" }
#include "Hit_Pick.res"
variable ParentElementID;
variable dummy;
variable DeckID;
variable ElementID;
variable positionID;
variable loopCounter3;
variable Worklist_Barcode;
file Worklist;
variable Code;
variable Worklist_Well_ID;
variable file1_Barcode;
variable file1_Source;
variable mainLoop;
variable Worklist_Destination;
variable Worklist_Name;
variable Worklist_Plate_ID;
variable file1_Destination;
global device ML_STAR ("Hit_Pick.lay", "ML_STAR", hslTrue);
variable AspVolume;
variable filename_path;
variable Optimised_Seq_Position;
file Optimised_Seq;
variable Continued_Dispense;
variable rows_used;
variable myPlateType;
variable myProtocol;
variable port;
variable errCode;
variable myDispenser;
variable GV_simOn;
variable GV_Labware_Position[];
sequence GV_Labware_Sequence[];
variable GV_End_Flag;
variable GV_PlatesOnDeck;
dialog customDialog_1;
variable Output_Filename;
variable Subtracted_string;
variable String_length;
variable Write_Barcode;
variable Write_Source;
variable Writefile_Destination;
variable Writefile_Name;
variable Sheet1;
file Writefile;
variable GV_Find_Path;
variable GV_Mapping;
variable GV_Find_Path_Length;
variable GV_Mapping_Path;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSTCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    filename_path = customDialog_1.GetCustomDialogProperty( "path1.Path" );
    AspVolume = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    rows_used = customDialog_1.GetCustomDialogProperty( "numeric2.Value" );
    Continued_Dispense = customDialog_1.GetCustomDialogProperty( "checkBox1.IsChecked" );
    PTL::ResetLoadingStateAndSequences();
    PTL::SetLoadingState("UserResponseTime", hslInfinite);
    PTL::SetLoadingState("ErrorHandling", 3);
    PTL::SetLoadingState("CalibrateCarrierChannel", -1);
    PTL::SetLoadingSize(1);
    PTL::SetLoadingSequence(0, ML_STAR.Tips50, 1, -10, hslTrue, hslTrue, "50ulTip");
    if( 0 == PTL::Load(ML_STAR, hslTrue) )
    {
          PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::GetLoadingSequence(0, ML_STAR.Tips50);
    DeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    DeckID = VectorDb_Deck::GetDeckID2(ML_STAR);
    HSLBarcodeReader::SetComPort(Translate("COM4"));
    GV_simOn = Util::GetSimulationMode();
    Define_Array();
    myDispenser = 1;
    port = 6;
    myProtocol = 9;
    myPlateType = 2;
    errCode = HSLPerkinElmerFlexDrop::COMMON::Initialize(myDispenser, port, HSLPerkinElmerFlexDrop::TRACE_LEVEL_NONE, HSLPerkinElmerFlexDrop::HSL_FALSE);
    Optimised_Seq.AddField("Position", Optimised_Seq_Position, hslString, 255);
    Optimised_Seq.SetDelimiter(hslCSVDelimited);
    if( 0 == Optimised_Seq.Open("C:\\SVN\\Hit_Pick\\trunk\\384_optimised_seq.csv", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, "C:\\SVN\\Hit_Pick\\trunk\\384_optimised_seq.csv", "HxMetEdCompCmd");
    }
    Worklist.AddField("Name", Worklist_Name, hslString, 255);
    Worklist.AddField("Plate_ID", Worklist_Plate_ID, hslString, 255);
    Worklist.AddField("Well_ID", Worklist_Well_ID, hslString, 255);
    Worklist.AddField("Barcode", Worklist_Barcode, hslString, 255);
    if( 0 == Worklist.Open(filename_path + " " + "Sheet1$", hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, filename_path, "HxMetEdCompCmd");
    }
    Code = Translate("Barcode01");
    String_length = StrGetLength(filename_path);
    String_length = String_length - 4;
    Subtracted_string = StrLeft(filename_path, String_length);
    Output_Filename = StrConcat2(Subtracted_string, Translate("_Output.xls"));
    Writefile.AddField("Name", Writefile_Name, hslString, 255);
    Writefile.AddField("Source Well", Write_Source, hslString, 255);
    Writefile.AddField("Barcode", Write_Barcode, hslString, 255);
    Writefile.AddField("Destination", Writefile_Destination, hslString, 255);
    if( 0 == Writefile.Open(Output_Filename + " " + "Sheet1", hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, Output_Filename, "HxMetEdCompCmd");
    }
    GV_Find_Path_Length = StrReverseFind(filename_path, Translate("\\"));
    GV_Find_Path_Length = GV_Find_Path_Length + 1;
    GV_Mapping_Path = StrLeft(filename_path, GV_Find_Path_Length);
    TrcTrace(Translate("String for path output.............."), GV_Mapping_Path);
    if (Continued_Dispense == 1)
    {
      Optimised_Seq.Seek(rows_used, hslFirst);
    }
    {
      mainLoop = 0;
      while (1 == 1)
      {
        mainLoop = mainLoop + 1;
        GV_PlatesOnDeck = 0;
        SeqRemoveAll(ML_STAR.Source);
        SeqRemoveAll(ML_STAR.Daughter1);
        GV_End_Flag = GetBarcodes(GV_simOn, GV_PlatesOnDeck);
        MECC::TraceComment(Translate("======================================================================="));
        {
          loopCounter3 = 0;
          while (
             (Worklist.Eof() == 0)
          )
          {
            loopCounter3 = loopCounter3 + 1;
            if( 0 == Worklist.ReadRecord() )
            {
                  MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            ElementID = VectorDb_Labware::IsBarcodeLoaded(DeckID, Worklist_Barcode);
            TrcTrace(Translate("Element Id ------"), ElementID);
            if (ElementID == 0)
            {
              MECC::TraceComment(Translate("Skip the sample"));
            }
            else
            {
              MECC::TraceComment(Translate("Get all labware data by elementID.\n\nPut it in the variable position ID"));
              if( 0 == Optimised_Seq.ReadRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              VectorDb_Labware::GetLabwareByElementID(ElementID, DeckID, ParentElementID, positionID, dummy, dummy, dummy, dummy, dummy, dummy, dummy, dummy, dummy);
              SeqAdd(ML_STAR.Source, positionID, Worklist_Well_ID);
              SeqAdd(ML_STAR.Daughter1, Translate("Daughter1"), Optimised_Seq_Position);
              Write_Barcode = Worklist_Barcode;
              Write_Source = Worklist_Well_ID;
              Writefile_Destination = Optimised_Seq_Position;
              Writefile_Name = Worklist_Name;
              if( 0 == Writefile.WriteRecord() )
              {
                    MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
              }
              TrcTrace(Translate("Destination....."), Worklist_Destination);
            }
          }
        }
        TrcTraceSequence(ML_STAR.Source);
        TrcTraceSequence(ML_STAR.Daughter1);
        MECC::TraceComment(Translate("The Sequences Need to be reset"));
        ML_STAR.Source.SetCurrentPosition(1);
        ML_STAR.Daughter1.SetCurrentPosition(1);
        Dispense();
        Worklist.Seek(0, hslFirst);
        if (GV_End_Flag == "True")
        {
          TrcTrace(Translate("In the loop"), GV_End_Flag);
          STCC::ResetFilterSequences();
          STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate1);
          STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate2);
          STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate3);
          STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate4);
          STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate5);
          {
            variable _FilterIdsArray_2[];
            variable _ColumnIdsArray_2[];
            variable _ColumnNamesArray_2[];
            variable _ExperimentsArray_2[];
            _FilterIdsArray_2.SetSize(0);
            _ColumnNamesArray_2.SetSize(10);
            _ColumnIdsArray_2.SetSize(10);
            _ColumnNamesArray_2.SetAt(0, "RecordId");
            _ColumnIdsArray_2.SetAt(0, 0);
            _ColumnNamesArray_2.SetAt(1, "TLabwareId");
            _ColumnIdsArray_2.SetAt(1, 2);
            _ColumnNamesArray_2.SetAt(2, "TPositionId");
            _ColumnIdsArray_2.SetAt(2, 3);
            _ColumnNamesArray_2.SetAt(3, "TStatusSummary");
            _ColumnIdsArray_2.SetAt(3, 5);
            _ColumnNamesArray_2.SetAt(4, "TSumStateDescription");
            _ColumnIdsArray_2.SetAt(4, 6);
            _ColumnNamesArray_2.SetAt(5, "TVolume");
            _ColumnIdsArray_2.SetAt(5, 7);
            _ColumnNamesArray_2.SetAt(6, "SRackBC");
            _ColumnIdsArray_2.SetAt(6, 8);
            _ColumnNamesArray_2.SetAt(7, "SLabwareId");
            _ColumnIdsArray_2.SetAt(7, 9);
            _ColumnNamesArray_2.SetAt(8, "SPositionId");
            _ColumnIdsArray_2.SetAt(8, 10);
            _ColumnNamesArray_2.SetAt(9, "ActionDateTime");
            _ColumnIdsArray_2.SetAt(9, 12);
            _ExperimentsArray_2.SetSize(0);
            STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.Daughter1, 1, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "Mapping.xls", 1, 1, GV_Mapping_Path, 1);
          }
          Remove_Labwares(GV_PlatesOnDeck);
          break;
        }
        Remove_Labwares(GV_PlatesOnDeck);
      }
    }
    if( 0 != Writefile.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Writefile.RemoveFields();
    if( 0 != Worklist.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Worklist.RemoveFields();
    if( 0 != Optimised_Seq.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    Optimised_Seq.RemoveFields();
    HSLPerkinElmerFlexDrop::COMMON::Terminate(myDispenser);
  } }
