private function Define_Array(  ) void ;
private function Dispense(  ) void ;
private function GetBarcodes( variable LV_SimOn, variable & LV_PlatesOnDeck ) variable ;
private function Remove_Labwares( variable LV_PlatesOnDeck ) void ;
private function Transfer_From_Flexdrop( variable LV_Labware_Position, sequence LV_Labware_Sequence ) variable ;
private function Transfer_To_Flexdrop( sequence LV_Labware_Sequence ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate1);
  STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate2);
  STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate3);
  STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate4);
  STCC::AddFilterSequence(ML_STAR, ML_STAR.CompoundPlate5);
  {
    variable _FilterIdsArray_1[];
    variable _ColumnIdsArray_1[];
    variable _ColumnNamesArray_1[];
    variable _ExperimentsArray_1[];
    _FilterIdsArray_1.SetSize(0);
    _ColumnNamesArray_1.SetSize(10);
    _ColumnIdsArray_1.SetSize(10);
    _ColumnNamesArray_1.SetAt(0, "RecordId");
    _ColumnIdsArray_1.SetAt(0, 0);
    _ColumnNamesArray_1.SetAt(1, "TLabwareId");
    _ColumnIdsArray_1.SetAt(1, 2);
    _ColumnNamesArray_1.SetAt(2, "TPositionId");
    _ColumnIdsArray_1.SetAt(2, 3);
    _ColumnNamesArray_1.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_1.SetAt(3, 5);
    _ColumnNamesArray_1.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_1.SetAt(4, 6);
    _ColumnNamesArray_1.SetAt(5, "TVolume");
    _ColumnIdsArray_1.SetAt(5, 7);
    _ColumnNamesArray_1.SetAt(6, "SRackBC");
    _ColumnIdsArray_1.SetAt(6, 8);
    _ColumnNamesArray_1.SetAt(7, "SLabwareId");
    _ColumnIdsArray_1.SetAt(7, 9);
    _ColumnNamesArray_1.SetAt(8, "SPositionId");
    _ColumnIdsArray_1.SetAt(8, 10);
    _ColumnNamesArray_1.SetAt(9, "ActionDateTime");
    _ColumnIdsArray_1.SetAt(9, 12);
    _ExperimentsArray_1.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, ML_STAR.Daughter1, 1, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "Mapping.xls", 1, 1, GV_Mapping_Path, 1);
  }
  if( 0 != Writefile.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Writefile.RemoveFields();
  if( 0 != Worklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Worklist.RemoveFields();
  if( 0 != Optimised_Seq.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  Optimised_Seq.RemoveFields();
  HSLPerkinElmerFlexDrop::COMMON::Terminate(myDispenser);
}

private function GetBarcodes( variable LV_SimOn, variable & LV_PlatesOnDeck ) variable {
  private variable barcodeCounter1;
  private variable LV_End_Flag;
  if (LV_SimOn == 0)
  {
    {
      for(barcodeCounter1 = 0; barcodeCounter1 < 5;)
      {
        barcodeCounter1 = barcodeCounter1 + 1;
        LV_End_Flag = Transfer_From_Flexdrop(GV_Labware_Position.ElementAt( barcodeCounter1 -1), GV_Labware_Sequence.ElementAt( barcodeCounter1 -1));
        TrcTrace(Translate("Loop iterator "), barcodeCounter1);
        if (LV_End_Flag == "True")
        {
          break;
        }
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    LV_PlatesOnDeck = barcodeCounter1;
  }
  if (LV_SimOn == 1)
  {
    STCC::SetElementBarcode(ML_STAR, "CompoundPlate", "", "RED1");
    STCC::SetElementBarcode(ML_STAR, "CompoundPlate2", "", "RED3");
    LV_End_Flag = Translate("False");
  }
  return (LV_End_Flag);
}

private function Dispense(  ) void {
  private variable loopCounter1;
  {
    loopCounter1 = 0;
    while (
       (ML_STAR.Source.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.Source, 1);
      loopCounter1 = loopCounter1 + 1;
      {
        	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
      }
      {
        	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
      }
      if(0){
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.Source.GetCurrentPosition() > 0 && ML_STAR.Source.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.Source.SetMax(ML_STAR.Source.GetTotal());
    ML_STAR.Source.SetCurrentPosition(1);
  }
}

private function Remove_Labwares( variable LV_PlatesOnDeck ) void {
  private variable removeBCounter;
  STCC::SetElementBarcode(ML_STAR, "CompoundPlate", "", "Fandan");
  STCC::SetElementBarcode(ML_STAR, "CompoundPlate5", "", "Fandan5");
  STCC::SetElementBarcode(ML_STAR, "CompoundPlate2", "", "Fandan2");
  STCC::SetElementBarcode(ML_STAR, "CompoundPlate3", "", "Fandan3");
  STCC::SetElementBarcode(ML_STAR, "CompoundPlate4", "", "Fandan4");
  {
    for(removeBCounter = 0; removeBCounter < LV_PlatesOnDeck;)
    {
      removeBCounter = removeBCounter + 1;
      Transfer_To_Flexdrop(GV_Labware_Sequence.ElementAt( removeBCounter -1));
    }
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
}

private function Transfer_From_Flexdrop( variable LV_Labware_Position, sequence LV_Labware_Sequence ) variable {
  HSLPerkinElmerFlexDrop::STACKER::DownStackA(myDispenser, myPlateType, 0, Translate("N"));
  HSLPerkinElmerFlexDrop::STACKER::Move2DivingBoard(myDispenser);
  HSLBarcodeReader::DelComBuffer();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._21E50809_DA69_4E9D_99CF_24FA577C214E("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"); // ZSwapMovePlate
  Code = HSLBarcodeReader::Read();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  STCC::SetElementBarcode(ML_STAR, LV_Labware_Position, "", Code);
  if (Code == "END-SEQ")
  {
    return (Translate("True"));
  }
  else
  {
    return (Translate("False"));
  }
}

private function Define_Array(  ) void {
  GV_Labware_Sequence.SetSize(0);
  GV_Labware_Sequence.AddAsLast(ML_STAR.CompoundPlate1);
  GV_Labware_Sequence.AddAsLast(ML_STAR.CompoundPlate2);
  GV_Labware_Sequence.AddAsLast(ML_STAR.CompoundPlate3);
  GV_Labware_Sequence.AddAsLast(ML_STAR.CompoundPlate4);
  GV_Labware_Sequence.AddAsLast(ML_STAR.CompoundPlate5);
  GV_Labware_Position.SetSize(0);
  GV_Labware_Position.AddAsLast(Translate("CompoundPlate"));
  GV_Labware_Position.AddAsLast(Translate("CompoundPlate2"));
  GV_Labware_Position.AddAsLast(Translate("CompoundPlate3"));
  GV_Labware_Position.AddAsLast(Translate("CompoundPlate4"));
  GV_Labware_Position.AddAsLast(Translate("CompoundPlate5"));
}

private function Transfer_To_Flexdrop( sequence LV_Labware_Sequence ) void {
  HSLPerkinElmerFlexDrop::STACKER::Move2DivingBoard(myDispenser);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  HSLPerkinElmerFlexDrop::STACKER::UpStackB(myDispenser, myPlateType, 0);
}
